PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = mental-rotation
  logging level = debug
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Routines
  Routine Instruction1
    TextComponent helloText
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome.

        You will see an image of two objects on the screen. They can be the same object, but rotated, or they can be different objects. For each pair, indicate if they are the same object but rotated, or if they are different objects.

        Press 'd' if they are different. Press 's' if they are the same.

        Now an example image with the correct answer will follow. After that, the experiment will start.

        Whenever you're ready, press the 's' to continue.
    KeyboardComponent helloKey
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction2
    TextComponent exampText
      color = black
      letterHeight = 0.035
      pos = [0, -0.25]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here, you can see that the object on the right is not the object on the left but rotated, it is a different object. They would still be different after mentally rotating them to line up.
        Here you would press 'd' for "different". If they were the same, you would press 's'.
        Try to respond as accurately as you can. Also try to be fast, but emphasize being accurate.
        Press 's' to start.
    KeyboardComponent exampKey
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent exampIm
      image = i43_0_R.jpg
      pos = [0.0, 0.15]
      saveStartStop = False
      size = [0.5,0.35]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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  Routine Trial
    KeyboardComponent trialResp
      allowedKeys [set every repeat] = 's', 'd'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent trialStimulus
      image [set every repeat] = $imagefile
      saveStartStop = False
      size = [0.7, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    TextComponent text
      color = black
      letterHeight = 0.03
      pos = [0, -0.4]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        press 'd' for "different"
        press 's' for "same"
  Routine rng
    TextComponent rng_instr
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = This is your 4-digit completion code. Please write this down for later use. When you are finished, press SPACE to end the experiment. 
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    TextComponent rng_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $random_number
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    KeyboardComponent rng_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent rng_code
      Code Type = JS
      Begin JS Experiment:
        random_number = Math.floor(Math.random() * 9999) + 1000;
Flow
  Routine Instruction1
  Routine Instruction2
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = mentalrotationstimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagefile', 'i1_0.jpg'), ('corrAns', 's'), ('angle', 0)]),
      OrderedDict([('imagefile', 'i1_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i1_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i2_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i2_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i3_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i3_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i4_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i4_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i5_0.jpg'), ('corrAns', 's'), ('angle', 0)]),
      OrderedDict([('imagefile', 'i5_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i5_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i6_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i6_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i7_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i7_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i8_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('imagefile', 'i8_100.jpg'), ('corrAns', 's'), ('angle', 100)]),
      OrderedDict([('imagefile', 'i9_0.jpg'), ('corrAns', 's'), ('angle', 0)])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
    Routine Trial
  LoopTerminator loop
  Routine rng
